PsychoPy2experiment version="2020.2.10"
Settings
  Audio lib = pygame
  Data filename = u'data/psychopy_logs/%s_%s_%s' % (expInfo['Subject ID'], expName, expInfo['date'])
  Experiment info = {'Subject ID': '', 'Language': "['English', 'English_easy', 'Deutsch', 'Chinese_simplified', 'Chinese_traditional']", 'Memory Update': 'True', 'Operation Span': 'True', 'Sentence Span': 'True', 'Spatial Short Term Memory': 'True', 'Random Seed': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = white
  expName = wmc
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Routines
  Routine base_init_trial
    CodeComponent base_code_init_trial
      Code Type = Py
      Begin Routine:
        #current_task.clean_trial()

        if current_task.do_practice:
            current_trial = current_task.start_new_practice_trial()
        else:
            current_trial = current_task.start_new_trial()

        do_break = current_task.has_pause()
  Routine base_instruction
    CodeComponent base_code_instruction
      Code Type = Py
      Begin Routine:
        instruction_filepath = instruction_filepaths.pop(0)
    ImageComponent base_image_instruction
      image [set every repeat] = $instruction_filepath
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent base_key_resp_instruction
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine base_init
    CodeComponent base_code_init
      Code Type = Py
      Begin Experiment:
        import datetime
        import os

        from common.config import WMCConfig
        from common.experiment_messages import ExperimentMessages
        from common.instructions import Instructions

        output_dir = os.path.join(os.getcwd(), 'data')

        thisExp.extraInfo['datetime'] = datetime.datetime.today()

        subject_id = thisExp.extraInfo['Subject ID']
        assert subject_id is not None

        language = thisExp.extraInfo['Language']

        config = WMCConfig(language=language)
        expmsgs = ExperimentMessages(language=language,
                                     encoding=config.experiment_messages.encoding)
        instructions = Instructions(language)

        do_mu_task = thisExp.extraInfo['Memory Update']
        do_os_task = thisExp.extraInfo['Operation Span']
        do_ss_task = thisExp.extraInfo['Sentence Span']
        do_sstm_task = thisExp.extraInfo['Spatial Short Term Memory']

        random_seed = thisExp.extraInfo['Random Seed']
        if random_seed is None or random_seed == '':
            random_seed = subject_id
      Begin Routine:
        instruction_filepaths = instructions.get_instructions('init')
        win.mouseVisible = False
        sstm_mouse.setVisible(False)
  Routine base_intertrial
    CodeComponent base_code_intertrial
      Code Type = Py
      Begin Routine:
        current_task.finish_trial()
    TextComponent base_text_intertrial
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_trial
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  Routine base_self_paced_break
    TextComponent base_text_self_paced_break
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text [set every repeat] = $expmsgs.experiment_break
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    KeyboardComponent base_key_resp_self_paced_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine base_after_break_pause
    TextComponent base_text_pause_after_break
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.after_break
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  Routine base_init_task
    CodeComponent base_code_init_task
      Code Type = Py
      Begin Routine:
        # set begin task message depending on practice
        if current_task.do_practice:
            msg_task_begin = expmsgs.begin_practice
        else:
            msg_task_begin = expmsgs.begin_task

        # choose practice or trial conditions
        if current_task.do_practice:
            n_trials = current_task.get_practice_trial_count()
        else:
            n_trials = current_task.get_trial_count()
    TextComponent base_text_begin_task
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_task_begin
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    KeyboardComponent base_key_resp_task_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine base_task_end
    CodeComponent base_code_task_end
      Code Type = Py
      Begin Routine:
        output_filepath = os.path.join(output_dir, f'{current_task.name}-{subject_id}.dat')
        current_task.write_results(output_filepath)
    TextComponent base_text_task_end
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text [set every repeat] = $expmsgs.task_end
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    KeyboardComponent base_key_resp_task_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mu_init
    CodeComponent mu_init_code
      Code Type = Py
      Begin Routine:
        from tasks.memory_update import MemoryUpdateTask
        current_task = MemoryUpdateTask(window=win, seed=random_seed, config=config.memory_update)
        mu_allowed_keys = current_task.allowed_keys

        instruction_filepaths = instructions.get_instructions('mu')
        n_instruction_pages = instructions.get_instruction_page_count('mu')
  Routine mu_init_trial
    CodeComponent mu_code_init_trial
      Code Type = JS
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    TextComponent mu_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
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  Routine mu_display_digit
    CodeComponent mu_code_digit
      Code Type = Py
      Begin Routine:
        current_digit, current_digit_position = current_trial.get_next_digit()
    TextComponent mu_text_digit
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      pos [set every repeat] = $current_digit_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.digit
      text [set every repeat] = $current_digit
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  Routine mu_empty_cells
    TextComponent mu_text_blank_2
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
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  Routine mu_display_operation
    CodeComponent mu_code_operation
      Code Type = Py
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      Begin Routine:
        current_operation, current_operation_position = current_trial.get_next_operation()
    TextComponent mu_text_operation
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      pos [set every repeat] = $current_operation_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.operation
      text [set every repeat] = $current_operation
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  Routine mu_recall
    CodeComponent mu_code_recall
      Code Type = Py
      Begin Routine:
        current_recall = current_trial.get_next_recall()
        recall_position = current_recall['position']

        correct_answer = str(current_recall['result'])
        if any(k.startswith('num') for k in current_task.allowed_keys):
            correct_answer = [correct_answer, f'num_{correct_answer}']

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('mu_key_resp_recall.correct_answer', current_recall['result'])
        thisExp.addData('mu_key_resp_recall.position', current_recall['position'])
        thisExp.addData('mu_key_resp_recall.position_id', current_recall['position_id'])
        thisExp.addData('mu_key_resp_recall.operation_sequence', current_recall['operation_sequence'])
      End Routine:
        keyboard_response = mu_key_resp_recall.keys.replace('num_', '')
        is_correct = keyboard_response == str(current_recall['result'])

        thisExp.addData('mu_key_resp_recall.response', keyboard_response)
        thisExp.addData('mu_key_resp_recall.is_correct', is_correct)
    TextComponent mu_text_question_mark
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      pos [set every repeat] = $recall_position
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent mu_key_resp_recall
      allowedKeys [set every repeat] = mu_allowed_keys
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mu_display_recall
    CodeComponent mu_code_display_recall
      Code Type = Py
      Begin Routine:
        keyboard_response = mu_key_resp_recall.keys.replace('num_', '')
        current_trial.save_response(keyboard_response)
    TextComponent mu_text_recall
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      pos [set every repeat] = $recall_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.recall
      text [set every repeat] = $keyboard_response
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  Routine os_init
    CodeComponent code_os_init
      Code Type = Py
      Begin Routine:
        from tasks.operation_span import OperationSpanTask

        current_task = OperationSpanTask(random_seed, config.operation_span)
        equation_keys = current_task.get_equation_keys()

        instruction_filepaths = instructions.get_instructions('os')
        n_instruction_pages = instructions.get_instruction_page_count('os')
  Routine os_init_trial
    CodeComponent os_code_init_trial
      Code Type = Py
      Begin Routine:
        n_presentations = current_trial.get_presentation_count()
    TextComponent os_text_fixation_cross
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
      text = +
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  Routine os_blank
    TextComponent os_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
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  Routine os_equation
    CodeComponent os_code_equation
      Code Type = Py
      Begin Routine:
        equation = current_trial.get_next_equation()
        equation_string = str(equation)
        correct_key = current_task.key_map[equation.correct]

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('os_key_resp_equation.equation_string', equation_string)
        thisExp.addData('os_key_resp_equation.equation_correct', equation.correct)
        thisExp.addData('os_key_resp_equation.correct_answer', correct_key)
      End Routine:
        keyboard_response = os_key_resp_equation.keys

        try:
            equation_response = current_task.inv_key_map[keyboard_response]
        except TypeError:
            equation_response = -1

        equation_rt = os_key_resp_equation.rt
        if equation_rt == []:
            equation_rt = 3.0

        current_trial.save_equation_response(equation_response, equation_rt)
    TextComponent os_text_equation
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.equation
      text [set every repeat] = $equation_string
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    KeyboardComponent os_key_resp_equation
      allowedKeys [set every repeat] = equation_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.equation
      storeCorrect = True
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  Routine os_recall
    CodeComponent os_code_recall
      Code Type = Py
      Begin Routine:
        correct_letter = current_trial.get_next_recall_letter()

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('os_key_resp_recall.correct_letter', correct_letter)

        os_allowed_keys = current_task.config.allowed_keys
    TextComponent os_text_question_mark
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent os_key_resp_recall
      allowedKeys [set every repeat] = os_allowed_keys
      correctAns = $correct_letter
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine os_display_recall
    CodeComponent os_code_display_recall
      Code Type = Py
      Begin Routine:
        letter_response = os_key_resp_recall.keys
        letter_rt = os_key_resp_recall.rt
        current_trial.save_letter_response(letter_response, letter_rt)
    TextComponent os_text_recall
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.recall
      text [set every repeat] = $letter_response.upper()
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  Routine os_letter
    CodeComponent os_code_letter
      Code Type = JS
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    TextComponent os_text_letter
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.
      stopVal [duration (s)] = current_task.config.timing.letter
      text [set every repeat] = $letter
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  Routine ss_init
    CodeComponent ss_code_init
      Code Type = Py
      Begin Routine:
        from tasks.sentence_span import SentenceSpanTask

        current_task = SentenceSpanTask(language=language, seed=random_seed, config=config.sentence_span)
        sentence_keys = current_task.get_sentence_keys()

        instruction_filepaths = instructions.get_instructions('ss')
        n_instruction_pages = instructions.get_instruction_page_count('ss')
  Routine ss_init_trial
    CodeComponent ss_code_init_trial
      Code Type = Py
      Begin Routine:
        n_presentations = current_trial.get_presentation_count()
    TextComponent ss_text_fixation_cross
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
      text = +
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  Routine ss_sentence
    CodeComponent ss_code_sentence
      Code Type = Py
      Begin Routine:
        sentence = current_trial.get_next_sentence()
        sentence_string = str(sentence)
        correct_key = current_task.key_map[sentence.correct]

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('ss_key_resp_sentence.sentence_string', sentence_string)
        thisExp.addData('ss_key_resp_sentence.sentence_correct', sentence.correct)
        thisExp.addData('ss_key_resp_sentence.correct_answer', correct_key)
      End Routine:
        keyboard_response = ss_key_resp_sentence.keys

        try:
            sentence_response = current_task.inv_key_map[keyboard_response]
        except TypeError:
            sentence_response = -1

        sentence_rt = ss_key_resp_sentence.rt
        if sentence_rt == []:
            sentence_rt = 3.0

        current_trial.save_sentence_response(sentence_response, sentence_rt)
    TextComponent ss_text_sentence
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.sentence
      text [set every repeat] = $sentence_string
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    KeyboardComponent ss_key_resp_sentence
      allowedKeys [set every repeat] = sentence_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.sentence
      storeCorrect = True
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  Routine ss_letter
    CodeComponent ss_code_letters
      Code Type = Py
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      Begin Routine:
        letter = current_trial.get_next_letter().upper()
    TextComponent ss_text_letter
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.letter
      text [set every repeat] = $letter
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  Routine ss_blank
    TextComponent ss_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
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  Routine ss_recall
    CodeComponent ss_code_recall
      Code Type = Py
      Begin Routine:
        correct_letter = current_trial.get_next_recall_letter()

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('ss_key_resp_recall.correct_letter', correct_letter)

        ss_allowed_keys = current_task.config.allowed_keys
    TextComponent ss_text_question_mark
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent ss_key_resp_recall
      allowedKeys [set every repeat] = ss_allowed_keys
      correctAns = $correct_letter
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ss_display_recall
    CodeComponent ss_code_display_recall
      Code Type = Py
      Begin Routine:
        letter_response = ss_key_resp_recall.keys
        letter_rt = ss_key_resp_recall.rt
        current_trial.save_letter_response(letter_response, letter_rt)
    TextComponent ss_text_display_recall
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.recall
      text [set every repeat] = $letter_response.upper()
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  Routine sstm_init
    CodeComponent sstm_code_init
      Code Type = Py
      Begin Routine:
        from tasks.spatial_short_term_memory import SpatialShortTermMemoryTask
        current_task = SpatialShortTermMemoryTask(window=win, seed=random_seed, experiment_data=thisExp, config=config.spatial_short_term_memory)

        instruction_filepaths = instructions.get_instructions('sstm')
        n_instruction_pages = instructions.get_instruction_page_count('sstm')
  Routine sstm_init_trial
    CodeComponent sstm_code_init_trial
      Code Type = Py
      Begin Routine:
        n_presentations = current_trial.get_presentation_count()
    TextComponent sstm_text_fixation_cross
      color = black
      letterHeight [set every repeat] = config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.fixation_cross
      text = +
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  Routine sstm_display_dot
    CodeComponent sstm_code_display_dot
      Code Type = Py
      Begin Routine:
        current_dot = current_trial.get_next_presentation()
    PolygonComponent sstm_polygon_display_dot
      fillColor = black
      nVertices = 128
      pos [set every repeat] = current_dot
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.dot
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  Routine sstm_empty_grid
    CodeComponent sstm_code_empty_grid
      Code Type = Py
      Begin Routine:
        current_trial.grid.show(True)
    TextComponent sstm_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
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  Routine sstm_recall
    CodeComponent sstm_code_recall
      Code Type = Py
      Begin Experiment:
        sstm_text_next_string = expmsgs.next_trial
      Begin Routine:
        current_trial.grid.show(True)
        win.mouseVisible = True
        sstm_mouse.setVisible(True)
      Each Frame:
        current_trial.process_mouse_event(sstm_mouse)

        if current_trial.selected_required_count():
            sstm_text_next.pos = (-0.325, -0.425)
        else:
            sstm_text_next.pos = (10, 10)
      End Routine:
        current_trial.grid.show(False)
        win.mouseVisible = False
        sstm_mouse.setVisible(False)

        sstm_trial_rt = sstm_mouse.time[-1]
        current_trial.save_response(sstm_trial_rt)

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('sstm_recall.correct_dots', current_trial.sequence)
        thisExp.addData('sstm_recall.response_dots', current_trial.response_dots)
        thisExp.addData('sstm_recall.response_time', current_trial.response_time)
    TextComponent sstm_text_next
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      pos = (10, 10)
      startVal [time (s)] = 0.0
      text = $sstm_text_next_string
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    MouseComponent sstm_mouse
      clickable = sstm_text_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine base_end
    TextComponent base_text_end
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = $expmsgs.end
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    KeyboardComponent base_key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sstm_task_end
    TextComponent text_sstm_task_end
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text = $expmsgs.task_end
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    KeyboardComponent sstm_key_resp_task_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_please_wait
      Code Type = Py
      End Routine:
        text_please_wait.setAutoDraw(True)
  Routine sstm_draw_request
    CodeComponent code_sstm_draw_request
      Code Type = Py
      Begin Experiment:
        sstm_text_draw_string = expmsgs.draw_dots
      Begin Routine:
        current_trial.grid.show(False)
    TextComponent text_sstm_draw_dots
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.draw_request
      text = $sstm_text_draw_string
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  Routine sstm_task_end_2
    TextComponent text_please_wait
      color = black
      letterHeight [set every repeat] = $config.experiment_messages.height
      startVal [time (s)] = 0.0
      text = Please wait to calculate scores and write results
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    CodeComponent sstm_code_write
      Code Type = Py
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      Begin Routine:
        text_please_wait.setAutoDraw(True)

        iiii = 0
      Each Frame:
        text_please_wait.setAutoDraw(True)

        iiii += 1

        if iiii >= 2:
            detailed_output_filepath = os.path.join(output_dir, 'sstm_detailed', f'{current_task.name}-{subject_id}.dat')
            current_task.write_results(detailed_output_filepath)

            overall_output_filepath = os.path.join(output_dir, f'{current_task.name}-{subject_id}.dat')
            current_task.write_overall_results(overall_output_filepath)

            continueRoutine = False
      End Routine:
        text_please_wait.setAutoDraw(False)
  Routine sstm_after_display_dot
    TextComponent sstm_text_after_display_dot
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
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Flow
  Routine base_init
  Routine base_instruction
  LoopInitiator do_memory_update_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_mu_task
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    Routine mu_init
    LoopInitiator mu_instruction_pages loopType="TrialHandler"
      loopType = sequential
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator mu_instruction_pages
    LoopInitiator mu_practice_dummy loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine base_init_task
      LoopInitiator mu_trials loopType="TrialHandler"
        loopType = random
        nReps = $n_trials
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        Routine base_init_trial
        Routine mu_init_trial
        LoopInitiator mu_presentations loopType="TrialHandler"
          loopType = random
          nReps = $n_digits
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          Routine mu_display_digit
          Routine mu_empty_cells
        LoopTerminator mu_presentations
        LoopInitiator mu_operations loopType="TrialHandler"
          loopType = random
          nReps = $n_operations
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          Routine mu_display_operation
          Routine mu_empty_cells
        LoopTerminator mu_operations
        LoopInitiator mu_recalls loopType="TrialHandler"
          loopType = random
          nReps = $n_digits
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          Routine mu_recall
          Routine mu_display_recall
        LoopTerminator mu_recalls
        Routine base_intertrial
        LoopInitiator mu_break_dummy loopType="TrialHandler"
          loopType = random
          nReps = $do_break
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          Routine base_self_paced_break
          Routine base_after_break_pause
        LoopTerminator mu_break_dummy
      LoopTerminator mu_trials
    LoopTerminator mu_practice_dummy
    Routine base_task_end
  LoopTerminator do_memory_update_dummy
  LoopInitiator do_operation_span_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_os_task
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    Routine os_init
    LoopInitiator os_instruction_pages loopType="TrialHandler"
      loopType = random
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator os_instruction_pages
    LoopInitiator os_practice_dummy loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine base_init_task
      LoopInitiator os_trials loopType="TrialHandler"
        loopType = random
        nReps = $n_trials
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        Routine base_init_trial
        Routine os_init_trial
        LoopInitiator os_presentations loopType="TrialHandler"
          loopType = random
          nReps = n_presentations
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          Routine os_equation
          Routine os_letter
          Routine os_blank
        LoopTerminator os_presentations
        LoopInitiator os_recalls loopType="TrialHandler"
          loopType = random
          nReps = $n_presentations
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          Routine os_recall
          Routine os_display_recall
        LoopTerminator os_recalls
        Routine base_intertrial
        LoopInitiator os_break_dummy loopType="TrialHandler"
          loopType = random
          nReps = $do_break
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          Routine base_self_paced_break
          Routine base_after_break_pause
        LoopTerminator os_break_dummy
      LoopTerminator os_trials
    LoopTerminator os_practice_dummy
    Routine base_task_end
  LoopTerminator do_operation_span_dummy
  LoopInitiator do_sentence_span_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_ss_task
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    Routine ss_init
    LoopInitiator ss_instruction_pages loopType="TrialHandler"
      loopType = random
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator ss_instruction_pages
    LoopInitiator ss_practice_dummy loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine base_init_task
      LoopInitiator ss_trials loopType="TrialHandler"
        loopType = random
        nReps = $n_trials
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        Routine base_init_trial
        Routine ss_init_trial
        LoopInitiator ss_presentations loopType="TrialHandler"
          loopType = random
          nReps = $n_presentations
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          Routine ss_sentence
          Routine ss_letter
          Routine ss_blank
        LoopTerminator ss_presentations
        LoopInitiator ss_recalls loopType="TrialHandler"
          loopType = random
          nReps = $n_presentations
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          Routine ss_recall
          Routine ss_display_recall
        LoopTerminator ss_recalls
        Routine base_intertrial
        LoopInitiator ss_break_dummy loopType="TrialHandler"
          loopType = random
          nReps = $do_break
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          Routine base_self_paced_break
          Routine base_after_break_pause
        LoopTerminator ss_break_dummy
      LoopTerminator ss_trials
    LoopTerminator ss_practice_dummy
    Routine base_task_end
  LoopTerminator do_sentence_span_dummy
  LoopInitiator do_spatial_short_term_memory_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_sstm_task
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    Routine sstm_init
    LoopInitiator sstm_instruction_pages loopType="TrialHandler"
      loopType = sequential
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator sstm_instruction_pages
    LoopInitiator sstm_practice_dummy loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine base_init_task
      LoopInitiator sstm_trials loopType="TrialHandler"
        loopType = sequential
        nReps = $n_trials
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        Routine base_init_trial
        Routine sstm_init_trial
        Routine sstm_empty_grid
        LoopInitiator sstm_presentations loopType="TrialHandler"
          loopType = sequential
          nReps = $n_presentations
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          Routine sstm_display_dot
          Routine sstm_after_display_dot
        LoopTerminator sstm_presentations
        Routine sstm_draw_request
        Routine sstm_recall
        Routine base_intertrial
        LoopInitiator sstm_break_dummy loopType="TrialHandler"
          loopType = random
          nReps = $do_break
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          Routine base_self_paced_break
          Routine base_after_break_pause
        LoopTerminator sstm_break_dummy
      LoopTerminator sstm_trials
    LoopTerminator sstm_practice_dummy
    Routine sstm_task_end
    Routine sstm_task_end_2
  LoopTerminator do_spatial_short_term_memory_dummy
  Routine base_end
